PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'age': '', 'biological sex (m/f/i)': '', 'handedness (l/r)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Behavioral_MBCA
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Routines
  Routine iti
    ImageComponent jitter1
      image [set every repeat] = $imageFix
      pos [set every repeat] = (0, 0)
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.
      units = pix
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  Routine stim_presentation1
    ImageComponent stim1
      image [set every repeat] = $imageFile
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent fix
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    TextComponent prob1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      text [set every repeat] = $option1
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  Routine stim_presentation2
    ImageComponent stim2
      image [set every repeat] = $imageFile2
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent fix2
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    TextComponent prob2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      text [set every repeat] = $option2
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  Routine choice
    TextComponent Choice
      color = black
      letterHeight = 0.1
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Choose
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    ImageComponent choice_fix
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      storeCorrect = True
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    CodeComponent timeout_code
      Code Type = Auto->JS
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      Begin Routine:
        numReps = 0
        numReps2 = 1
      End Routine:
        if not key_resp_2.keys:
            numReps = 1
            numReps2 = 0
  Routine long_delay
    ImageComponent fix3
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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  Routine Outcome
    TextComponent reveal
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $option1
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    ImageComponent fix5
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = pix
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    ImageComponent outcome_circle
      image [set every repeat] = $outcome
      size = (1280, 720)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = pix
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    CodeComponent setMsg
      Code Type = Auto->JS
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      Begin Experiment:
        points_this_round = 0
        points_total = 0
      Begin Routine:
        if key_resp_2.corr:
            msg= outcome_msg_optimal
            msgColor='black'
            points_this_round= point_earned_optimal
        else:
            msg= outcome_msg_alt
            msgColor='black'
            points_this_round= point_earned_alt
      End Routine:
        if not key_resp_2.keys:
            points_total=0 + points_total
          # thisExp.addData('points_total',points_total)
        else:
            points_total=points_this_round + points_total
           # thisExp.addData('points_total',points_total)
    TextComponent feedbacktext
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $msg
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  Routine iti2
    ImageComponent fix4
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine counterfactual
    TextComponent reveal2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $option2
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    ImageComponent fix6
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = pix
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    ImageComponent counter_square
      image [set every repeat] = $counterfactual
      size = (1280, 720)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = pix
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    CodeComponent setmsg2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_2.corr:
            msg= counterfactual_msg_optimal
            msgColor='black'
        else:
            msg= counterfactual_msg_alt
            msgColor='black'
    TextComponent feedbacktext_2
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $msg
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  Routine practice_end
    TextComponent practice_finish
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This concludes the practice. Press the spacebar when ready to continue to the actual trials. 
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent total_points_earned
      color = black
      letterHeight = 0.08
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $points_total
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    TextComponent points_earned
      color = black
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Total Points Earned During Practice:  
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  Routine sum_results
    CodeComponent result_of_sum
      Code Type = Auto->JS
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      End Routine:
        total_points = 0
        if key_resp_2.corr:
            total_points = total_points + point_earned
  Routine sum_of_points
    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        total_points = 0
        if key_resp_2.corr:
            total_points = total_points + point_earned
  Routine timeout_msg
    TextComponent timeout_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You did not respond in time! This trial will not count. Please make sure that you are paying attention. Press the spacebar when ready to continue. 
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exp_Instructions
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = We will now start the actual experiment. You will no longer be seeing text with your result, just the colored shapes associated with each outcome. You will be performing N blocks of this task, at the end of the experiment we will select the points you earned on one block and that will be converted to a dollar amount which we will send to you via email. Press the spacebar when ready to continue. 
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac_Instructions
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Ins
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Hello, in this task you will be presented with two separate images of a face and a house. You will see points overlayed on these images that you can gamble for. Each image will have an independent probability of leading to that amount of reward. Once you see the choose screen, you will indicate which image you'd like to gamble for with the left and right arrow key. Press left for the first image and right for the second. Based on the number of points you get in a given block, you will receive a cash payout! To start we will first be performing a few practice rounds.
        Please note that loss does not mean that you will lose that amount of points for your gamble, it just means that you earned zero points.
        When you're ready press the spacebar to continue.
  Routine Finish
    TextComponent Block_Finish
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This concludes the first block. Please feel free to take a break and press the spacebar whenever you are ready to continue. 
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    KeyboardComponent block1_wait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent block1_points
      color = black
      letterHeight = 0.08
      pos = (0, .25)
      startVal [time (s)] = 0.0
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      text:
        $points_total
    TextComponent block1_points_earned
      color = black
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Total Points Earned During Block 1:  
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  Routine Outcome_exp
    TextComponent reveal_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $option1
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    ImageComponent fix5_2
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = pix
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    ImageComponent outcome_circle_2
      image [set every repeat] = $outcome
      size = (1280, 720)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = pix
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    CodeComponent setMsg_2
      Code Type = Auto->JS
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      Begin Experiment:
        points_this_round = 0
        points_total = 0
      Begin Routine:
        if key_resp_2.corr:
            points_this_round=point_earned_optimal
        else:
            points_this_round=point_earned_alt
      End Routine:
        if not key_resp_2.keys:
            points_total=0 + points_total
          # thisExp.addData('points_total',points_total)
        else:
            points_total=points_this_round + points_total
           # thisExp.addData('points_total',points_total)
  Routine counterfactual_exp
    TextComponent reveal2_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $option2
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    ImageComponent fix6_2
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = pix
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    ImageComponent counter_square_2
      image [set every repeat] = $counterfactual
      size = (1280, 720)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = pix
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Flow
  Routine Prac_Instructions
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'stimuli/Face1.jpg'), ('imageFile2', 'stimuli/house1.png'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 15), ('option2', 35), ('outcome', 'stimuli/green_circle.PNG'), ('counterfactual', 'stimuli/red_square.PNG'), ('corr', 'left'), ('point_earned_optimal', 15), ('point_earned_alt', 0), ('outcome_msg_optimal', 'You won!'), ('outcome_msg_alt', 'You would have won!'), ('counterfactual_msg_optimal', 'You would have lost!'), ('counterfactual_msg_alt', 'You lost!')]),
      OrderedDict([('imageFile', 'stimuli/house1.png'), ('imageFile2', 'stimuli/Face1.jpg'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 25), ('option2', 55), ('outcome', 'stimuli/red_circle.PNG'), ('counterfactual', 'stimuli/green_square.PNG'), ('corr', 'right'), ('point_earned_optimal', 55), ('point_earned_alt', 0), ('outcome_msg_optimal', 'You would have lost! '), ('outcome_msg_alt', 'You lost! '), ('counterfactual_msg_optimal', 'You won! '), ('counterfactual_msg_alt', 'You would have won! ')]),
      OrderedDict([('imageFile', 'stimuli/Face1.jpg'), ('imageFile2', 'stimuli/house1.png'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 55), ('option2', 10), ('outcome', 'stimuli/green_circle.PNG'), ('counterfactual', 'stimuli/green_square.PNG'), ('corr', 'left'), ('point_earned_optimal', 55), ('point_earned_alt', 10), ('outcome_msg_optimal', 'You won! '), ('outcome_msg_alt', 'You would have won!'), ('counterfactual_msg_optimal', 'You would have won! '), ('counterfactual_msg_alt', 'You won! ')]),
      OrderedDict([('imageFile', 'stimuli/house1.png'), ('imageFile2', 'stimuli/Face1.jpg'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 20), ('option2', 30), ('outcome', 'stimuli/red_circle.PNG'), ('counterfactual', 'stimuli/red_square.PNG'), ('corr', 'right'), ('point_earned_optimal', 0), ('point_earned_alt', 0), ('outcome_msg_optimal', 'You lost! '), ('outcome_msg_alt', 'You would have lost! '), ('counterfactual_msg_optimal', 'You would have lost! '), ('counterfactual_msg_alt', 'You lost! ')])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
    Routine iti2
    Routine stim_presentation1
    Routine iti
    Routine stim_presentation2
    Routine iti
    Routine choice
    LoopInitiator message_loop loopType="TrialHandler"
      loopType = sequential
      nReps = numReps
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      Routine timeout_msg
    LoopTerminator message_loop
    LoopInitiator practice_timeout loopType="TrialHandler"
      loopType = sequential
      nReps = numReps2
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      Routine long_delay
      Routine Outcome
      Routine iti2
      Routine counterfactual
    LoopTerminator practice_timeout
  LoopTerminator practice
  Routine practice_end
  Routine Exp_Instructions
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = block1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'stimuli/Face1.jpg'), ('imageFile2', 'stimuli/house1.png'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 15), ('option2', 35), ('outcome', 'stimuli/green_circle.PNG'), ('counterfactual', 'stimuli/red_square.PNG'), ('corr', 'left'), ('point_earned_optimal', 15), ('point_earned_alt', 0)]),
      OrderedDict([('imageFile', 'stimuli/house1.png'), ('imageFile2', 'stimuli/Face1.jpg'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 25), ('option2', 55), ('outcome', 'stimuli/red_circle.PNG'), ('counterfactual', 'stimuli/green_square.PNG'), ('corr', 'right'), ('point_earned_optimal', 55), ('point_earned_alt', 0)]),
      OrderedDict([('imageFile', 'stimuli/Face1.jpg'), ('imageFile2', 'stimuli/house1.png'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 55), ('option2', 10), ('outcome', 'stimuli/green_circle.PNG'), ('counterfactual', 'stimuli/green_square.PNG'), ('corr', 'left'), ('point_earned_optimal', 55), ('point_earned_alt', 10)]),
      OrderedDict([('imageFile', 'stimuli/house1.png'), ('imageFile2', 'stimuli/Face1.jpg'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 20), ('option2', 30), ('outcome', 'stimuli/red_circle.PNG'), ('counterfactual', 'stimuli/red_square.PNG'), ('corr', 'right'), ('point_earned_optimal', 0), ('point_earned_alt', 0)])]
    Routine iti2
    Routine stim_presentation1
    Routine iti
    Routine stim_presentation2
    Routine iti
    Routine choice
    LoopInitiator timeout_msg_loop loopType="TrialHandler"
      loopType = sequential
      nReps = numReps
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      Routine timeout_msg
    LoopTerminator timeout_msg_loop
    LoopInitiator timeout loopType="TrialHandler"
      loopType = sequential
      nReps = numReps2
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      Routine long_delay
      Routine Outcome_exp
      Routine iti2
      Routine counterfactual_exp
    LoopTerminator timeout
  LoopTerminator block1
  Routine Finish
